OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Change "Filename" to the
  data just recorded from Acquisition
  (i.e. Kyl014_Trn1.csv)
Comment
  Step 2: Change "Spatial filter configuration" to
  the CSP just saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Step 3: Change "Filename to save the configuration to"
  to where you want to save your LDA classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 4: Run scenario and fast-forward

CSV File Reader => #0
  Filename = C:/Users/Laboratorio/Desktop/record-[2023.05.15-15.58.39].csv
#0.Output stream -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Input stream 1=#1, Input stream 2=#0.Output stimulation -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/Laboratorio/Desktop/csp-spatial-filter.cfg
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left Trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #7
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right Trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #11
Stimulations=#2.Output stream 2, Features for class 1=#7, Features for class 2=#11 -> Classifier trainer
  Train trigger = OVTK_GDF_End_Of_Session
  Filename to save configuration to = C:/Users/Laboratorio/Desktop/classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
